PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = BETA_003
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Routines
  Routine Trial
    CodeComponent initializeTrial
      Code Type = Py
      Begin Experiment:
        #Initial color intensity of the feedback stimulus (used for debugging)
        intensity = .5

        #Initial tone volume (in psychopy units)
        toneVolume = 0.5
    SoundComponent Long_Tone1
      sound = 1000
      startVal [time (s)] = 1.05
      stopVal [duration (s)] = $startProbe1
      volume [set every repeat] = toneVolume
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    TextComponent Delay
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        +
    TextComponent ISI
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.8
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    SoundComponent Long_Tone2
      sound = 1000
      startVal [time (s)] = 2.15
      stopVal [duration (s)] = $startProbe2
      volume [set every repeat] = toneVolume
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    SoundComponent Bandpass_Noise1
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = .30
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    SoundComponent Bandpass_Noise2
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 2.1
      stopVal [duration (s)] = 0.3
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    TextComponent Interval1
      letterHeight = 1
      startVal [time (s)] = 1
      stopVal [duration (s)] = .3
      text = 1
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    TextComponent Interval2
      letterHeight = 1
      startVal [time (s)] = 2.1
      stopVal [duration (s)] = 0.3
      text = 2
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  Routine Welcome
    TextComponent Welcome_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Auditory Tone Detection Task

        Press SPACE to continue
    KeyboardComponent Welcome_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inter_trial_Interval
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine Instructions
    TextComponent Instructions_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be presented with trials.
        In each of these trials, you will be presented with two listening intervals.
        A tone will be presented in only one of the two intervals.

        The listening intervals are indicated by the numbers "1" and "2", presented on your screen.
        The listening intervals are separated by less than a second (800ms), so make sure you are being attentive!
        After the two listening intervals, you must decide in which interval you heard the tone.

        Press SPACE for further instructions
    KeyboardComponent Instructions_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Next
    TextComponent Next_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press SPACE to start the next trial
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    KeyboardComponent Next_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question
    TextComponent Question_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In which interval ("1" or "2") do you think you heard the tone?
        Respond using the number pad.

        If you are unsure, just pick the interval you are most confident with.
    KeyboardComponent Question_Response
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    TextComponent Feedback_text
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $toneVolume
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    CodeComponent Feedback_Intensity
      Code Type = Py
      Begin Routine:
        if Question_Response.keys[0] == str(interval):
           #Attempt at adjusting tone volume
           toneVolume = toneVolume - 0.05 #tone volume goes down 2 dB for every correct response
           print('Tone Volume is now:', toneVolume)

           #Adjusting feedback color for debugging
           intensity = intensity - 0.05
           Feedback_text.setColor([0,intensity,0], colorSpace='rgb') #GREEN


        elif Question_Response.keys[0] != str(interval):
           #Attempt at adjusting tone volume
           toneVolume = toneVolume + 0.05 #tone volume goes down by 2dB for every correct response
           print('Tone Volume is now:', toneVolume)

           #Adjusting feedback color for debugging
           intensity = intensity + 0.05
           Feedback_text.setColor([intensity,0,0], colorSpace='rgb') #RED
Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('interval', 1), ('probe1', 1), ('probe2', 0)]),
      OrderedDict([('interval', 2), ('probe1', 0), ('probe2', 1)]),
      OrderedDict([('interval', 1), ('probe1', 1), ('probe2', 0)]),
      OrderedDict([('interval', 2), ('probe1', 0), ('probe2', 1)]),
      OrderedDict([('interval', 1), ('probe1', 1), ('probe2', 0)])]
    Routine Trial
    Routine Question
    Routine Feedback
    Routine Next
  LoopTerminator trials
