PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = exampleQuest
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = -1
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $level
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Flow
  LoopInitiator trials loopType="MultiStairHandler"
    loopType = interleaved staircases
    nReps = 50
    stairType = QUEST
    switchMethod = random
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    Routine trial
  LoopTerminator trials
