PsychoPy2experiment version="2020.2.8"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant'], expName, expInfo['date'])
  Experiment info = {'Participant': '', 'Session': '1', 'Condition': "['Quiet', 'Simultaneous', 'Backward']", 'Calibration': '0.8912509381337447', 'Practice': "['Yes', 'No']", 'Instructions': "['Yes', 'No']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = pure_tone_detection_dutch
  logging level = debug
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Routines
  Routine firstChoiceSpace
    CodeComponent firstChoiceCode
      Code Type = Auto->JS
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      Begin Routine:
        condition = trialList[trialNumber]

        if condition == '1':
            toneDuration = 0.02

        elif condition == '2':
            toneDuration = 0
    TextComponent firstVisualStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 1
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    SoundComponent firstChoiceNoise
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      volume [set every repeat] = psychopy_input_value_for_noise
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    SoundComponent firstChoiceProbeTone
      sound = pure_tone_1000Hz.wav
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = psychopy_input_value
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    ImageComponent firstChoiceLeftStimulus
      image = lightBulb_ON.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent firstChoiceRightStimulus
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine ISI
    TextComponent ISIVisualStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $ISI_TXT
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    ImageComponent rightStimulus
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent leftStimulus
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine secondChoiceSpace
    CodeComponent secondChoiceCode
      Code Type = Auto->JS
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      Begin Routine:
        if condition == '1':
            toneDuration = 0

        elif condition == '2':
            toneDuration = 0.02
    SoundComponent secondChoiceTone
      sound = pure_tone_1000Hz.wav
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = psychopy_input_value
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    SoundComponent secondChoiceNoise
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      volume [set every repeat] = psychopy_input_value_for_noise
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    TextComponent secondVisualStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 2
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    ImageComponent secondChoiceLeftStimulus
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent secondChoiceRightStimulus
      image = lightBulb_ON.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine ITI
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent ITICode
      Code Type = Auto->JS
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      Begin Routine:
        #tone
        #randomly assign which interval the tone appears in
        if trialNumber == 0:
            halfNTrials = int(trials.nTrials/2)
            trialList = ['1']*halfNTrials + ['2']*halfNTrials
            np.random.shuffle(trialList)
            print(trialList)

        #convert variable types to integer
        desired_db = float(level)
        psychopy_input_value = ((calibration)/(10**(117/20))*(10**(desired_db/20)))

        #Noise
        if expInfo['Condition'] == 'Quiet': #if the Condition is Quiet, turn off background noise
            psychopy_input_value_for_noise = 0
        else:
            #Note: 75 is being requested here to play noise at an average of 60 dB SPL (difference is due to frequency response of the headphones)
            # If you are concerned, you can test this using the headphone_calibration_check file - just change the tone being played to the noise tone
            noise_db = int(75)
            calibration = float(calibration)
            psychopy_input_value_for_noise = ((calibration)/(10**(117/20))*(10**(noise_db/20)))

        #print relevant information
        print('desired dB on this loop was:', desired_db)
        print('psychopy input value', psychopy_input_value)
        print('calibration:', calibration)
        print('psychopyvalue for noise:', psychopy_input_value_for_noise)
  Routine decisionSpace
    CodeComponent decisionCode
      Code Type = Auto->JS
      Begin Routine:
        corrAns = condition
    TextComponent decisionTextProbe
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = $PROBE_TXT
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    KeyboardComponent decisionKey
      allowedKeys = ['1','2']
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine feedbackSpace
    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "defaultFeedback"
      Begin Routine:
        if decisionKey.keys[0] == str(corrAns):
           feedback = CORRECT_TXT

        if decisionKey.keys[0] != str(corrAns):
           feedback = INCORRECT_TXT
      End Routine:
        trialNumber = trialNumber + 1

        #save additional variables to the data file
        thisExp.addData('Trial', trialNumber)
        thisExp.addData('Psychopy_input_value', psychopy_input_value)
        thisExp.addData('Desired_dB', desired_db)
        thisExp.addData('Condition', condition)
        thisExp.addData('trialType', 'Test')
        thisExp.addData('Response_time', decisionKey.rt)
        thisExp.addData('Accuracy', decisionKey.corr)
    TextComponent feedbackText
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine setUp
    TextComponent firstITI
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trialNumber = 0
  Routine welcome
    TextComponent welcomeText
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = $WELCOME_TXT
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Experiment:
        #Determine whether instructions should be run
        if expInfo['Instructions'] == 'Yes':
            instructionsToggle = 1
        if expInfo['Instructions'] == 'No':
                instructionsToggle = 0

        #Determine whether practice should be run
        if expInfo['Practice'] == 'Yes':
            practiceToggle = 1
        if expInfo['Practice'] == 'No':
                practiceToggle = 0

        #Create calibration variable based on what was input in initial GUI expInfo['Calibration']
        calibration = float(expInfo['Calibration'])

        #Set noise tone onset times based on condition selected in initial GUI (or 'expInfo['Condition'])
        if expInfo['Condition'] == 'Simultaneous': #if Condition is 'Simultaneous', make onset 200ms into the trial
            toneOnset = 0.22 #.22 rather than .20 to account account for the 20ms gap that exists before the noise (starting at 20ms into the trial) at the start of the trial
        elif expInfo['Condition'] == 'Backward':  #else if Condition is 'Backward' : make Onset start at 0 (20ms before noise)
            toneOnset = 0
        else: #else, just start the tone in sync with the start of the noise (as per the 'Quiet' Condition)
            toneOnset = 0.02
    CodeComponent translation_code
      Code Type = Auto->JS
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      Before Experiment:
        ### START DEFINE MESSAGES TO PARTICIPANT ###
        # messages are defined in order of appearance in
        # the experiment


        # note that '\n' means 'newline', so use
        # a \n every time you want the immediately following
        # character to start on a new line


        WELCOME_TXT = (
            "Welkom bij de toon-detectie taak!\n\n"
            "Druk SPATIE om door te gaan"
        )


        INSTRUCT_TXT1 = (
            "Wanneer je de taak begint, dan zie je "
            "twee lampjes aan beide kanten van het scherm."
        )


        CONTINUE_TXT = (
            " Druk SPATIE om door te gaan "
        )


        INSTRUCT_TXT2 = (
            "In iedere trial zullen de lampjes knipperen"
        )


        INSTRUCT_TXT3 = (
            "Het linker lampje, of “light bulb 1” knippert altijd eerst"
        )


        CONTINUE_BULB1_TXT = (
            " Druk SPATIE om light bulb 1 (licht 1) te zien knipperen "
        )


        INSTRUCT_TXT4 = (
            "Na een korte pauze zal het rechter lampje "
            "'light bulb 2' ook knipperen"
        )


        INSTRUCT_TXT5 = (
            "In iedere trial zal je een toon horen terwijl ÉÉN van de lampjes knippert."
        )


        CONTINUE_HEARSOUND_TXT = (
            " Druk SPATIE om deze toon te horen "
        )


        INSTRUCT_TXT6 = (
            "Onthoud, alhoewel beide lampjes zullen knipperen, "
            "hoor je de toon maar tijdens het knipperen van ÉÉN van de lampjes"
        )


        INSTRUCT_TXT7 = (
            "Je moet kiezen tijdens welke lamp je de toon "
            "hoorde door te reageren met de nummers op het toetsenbord"
        )


        INSTRUCT_TXT8 = (
            "ALS je denkt dat je de toon hoorde tijdens lamp 1 (links), druk '1'\n"
            "OF ALS je denkt dat je de toon hoorde tijdens lamp 2 (rechts), druk dan ‘2’"
        )


        BEGIN_PRACTICE_TXT = (
            "Druk ‘p’ om eerst te oefenen!"
        )


        # message displayed during inter-stimulus interval
        # (put empty string, "", if you don't want any message
        # to be displayed during ISI)
        ISI_TXT = (
            "ISI"
        )


        # feedback messages displayed depending on participant
        # response
        CORRECT_TXT = (
            "Correct"
        )
        INCORRECT_TXT = (
            "Incorrect"
        )


        PROBE_TXT = (
            "Tijdens welke lamp hoorde je de toon?\n"
            "1 OF 2?"
        )


        PRACTICE_COMPLETE_TXT = (
            "Je bent nu klaar met oefenen!\n"
            "Als je de taak begrijpt, druk dan ‘c’ om door te gaan!\n"
            "Als je taak niet begrijpt, vraag dan nu om hulp!"
        )


        BEGIN_TEST_TXT = (
            "De taak begint wanneer je op ‘b’ drukt.\n\n"
            "Onthoud, in de echte taak zijn de tonen tijdens de lampjes "
            "korter dan tijdens de oefening.\n\n"
            "De trials gaan ook iets je sneller, dus blijf alert!\n\n"
            "Druk 'b' om te beginnen"
        )


        END_TXT = (
            "Dankjewel voor het meedoen met deze taak!\n\n"
            "Druk ‘e’ om te stoppen"
        )


        ### END DEFINE MESSAGES TO PARTICIPANT ###
  Routine practice
  Routine instructions
    ImageComponent instructionsLightBulb1
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instructionsText
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        $INSTRUCT_TXT1
    TextComponent pressSpace
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = $CONTINUE_TXT
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
    ImageComponent instructionsLightBulb1_2
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2_2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instructionsText_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = $INSTRUCT_TXT2
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    TextComponent pressSpace_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = $CONTINUE_TXT
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_3
    ImageComponent instructionsLightBulb1_3
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2_3
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = $INSTRUCT_TXT3
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    TextComponent pressSpace_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = $CONTINUE_BULB1_TXT
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_4
    ImageComponent instructionsLightBulb1_4
      image = lightBulb_ON.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent instructionsLightBulb2_4
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instructions_5
    ImageComponent instructionsLightBulb1_5
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2_5
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent instructionsLightBulb2_6
      image = lightBulb_ON.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 3
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = $INSTRUCT_TXT4
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    TextComponent pressSpace_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4
      text = $CONTINUE_TXT
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine instructions_6
    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        $INSTRUCT_TXT5
    TextComponent text_5
      color = black
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 2
      text = $CONTINUE_HEARSOUND_TXT
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instructions_7
    CodeComponent instructions_7_code
      Code Type = Auto->JS
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      Begin Routine:
        #set desired dB of the practice trials to 40
        desired_db = 50

        #convert variable types to integer
        calibration = float(calibration)
        desired_db = int(desired_db)


        psychopy_input_value = ((calibration)/(10**(117/20))*(10**(desired_db/20)))
    ImageComponent lightBulbOFF
      image = lightBulb_OFF.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent lightBulbON
      image = lightBulb_ON.png
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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    SoundComponent sound_1
      sound = 1000
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      volume [set every repeat] = psychopy_input_value
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  Routine instructions_8
    TextComponent instructions_8_firstLine
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        $INSTRUCT_TXT6
    TextComponent text_8
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 2
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      text:
        $INSTRUCT_TXT7
    TextComponent text_9
      color = black
      letterHeight = 0.04
      pos = (0, 0.00)
      startVal [time (s)] = 4
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      text:
        $INSTRUCT_TXT8
    TextComponent instructions_8_pressP
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 6
      text = $BEGIN_PRACTICE_TXT
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    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 6
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  Routine practice_ITI
    CodeComponent practice_code
      Code Type = Auto->JS
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      Begin Routine:
        #set desired dB of the practice trials to 80 db SPL
        desired_db = int(80)
        psychopy_input_value = ((calibration)/(10**(117/20))*(10**(desired_db/20)))

        #Noise
        if expInfo['Condition'] == 'Quiet': #if the Condition is Quiet, turn off background noise
            psychopy_input_value_for_noise = 0
        else:
            #Note: 75 is being requested here to play noise at an average of 60 dB SPL (difference is due to frequency response of the headphones)
            # If you are concerned, you can test this using the headphone_calibration_check file - just change the tone being played to the noise tone
            noise_db = int(75)
            calibration = float(calibration)
            psychopy_input_value_for_noise = ((calibration)/(10**(117/20))*(10**(noise_db/20)))
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine practice_firstChoiceSpace
    CodeComponent firstChoiceCode_2
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 1:
            toneDuration = .20

        if condition == 2:
            toneDuration = 0
    SoundComponent firstChoiceProbeTone_2
      sound = pure_tone_1000Hz.wav
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = psychopy_input_value
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    SoundComponent firstChoice_Noise
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      volume [set every repeat] = psychopy_input_value_for_noise
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    TextComponent firstVisualStimulus_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 1
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    ImageComponent firstChoiceLeftStimulus_2
      image = lightBulb_ON.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent firstChoiceRightStimulus_2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine practice_secondChoiceSpace
    TextComponent ISIVisualStimulus_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ISI
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    ImageComponent rightStimulus_2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent leftStimulus_2
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine practice_decisionSpace
    CodeComponent decisionCode_2
      Code Type = Auto->JS
      Begin Routine:
        corrAns = condition
    TextComponent decisionTextProbe_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = $PROBE_TXT
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    KeyboardComponent decisionKey_2
      allowedKeys = ['1','2']
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine practice_feedbackSpace
    CodeComponent feedbackCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "defaultFeedback"
      Begin Routine:
        if decisionKey_2.keys[0] == str(corrAns):
           feedback = CORRECT_TXT

        if decisionKey_2.keys[0] != str(corrAns):
           feedback = INCORRECT_TXT
      End Routine:
        #save additional variables to the data file
        thisExp.addData('Trial', practiceTrials.thisN)
        thisExp.addData('Psychopy_input_value', psychopy_input_value)
        thisExp.addData('Desired_dB', desired_db)
        thisExp.addData('Condition', condition)
        thisExp.addData('trialType', 'Practice')
        thisExp.addData('Response_time', decisionKey_2.rt)
        thisExp.addData('Accuracy', decisionKey_2.corr)
    TextComponent feedbackText_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine practice_ISI
    TextComponent ISIVisualStimulus_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $ISI_TXT
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    ImageComponent rightStimulus_3
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent leftStimulus_3
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine practice_secondChoiceSpace_2
    CodeComponent secondChoiceCode_2
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 1:
            toneDuration = 0

        if condition == 2:
            toneDuration = 0.20
    SoundComponent secondChoiceTone_2
      sound = pure_tone_1000Hz.wav
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = psychopy_input_value
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    SoundComponent secondChoice_Noise
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      volume [set every repeat] = psychopy_input_value_for_noise
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    TextComponent secondVisualStimulus_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 2
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    ImageComponent secondChoiceLeftStimulus_2
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent secondChoiceRightStimulus_2
      image = lightBulb_ON.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine practiceComplete
    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $PRACTICE_COMPLETE_TXT
    KeyboardComponent key_resp_7
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginTest
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $BEGIN_TEST_TXT
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    KeyboardComponent key_resp_8
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testComplete
    TextComponent text_11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $END_TXT
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    KeyboardComponent key_resp_9
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator instructions_loop loopType="TrialHandler"
    loopType = sequential
    nReps = instructionsToggle
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    Routine instructions
    Routine instructions_2
    Routine instructions_3
    Routine instructions_4
    Routine instructions_5
    Routine instructions_6
    Routine instructions_7
    Routine instructions_8
  LoopTerminator instructions_loop
  Routine setUp
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = practiceConditionsFile.xlsx
    loopType = sequential
    nReps = practiceToggle
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    conditions:
      [OrderedDict([('condition', 1)]),
      OrderedDict([('condition', 2)]),
      OrderedDict([('condition', 1)]),
      OrderedDict([('condition', 2)]),
      OrderedDict([('condition', 1)])]
    Routine practice_ITI
    Routine practice_firstChoiceSpace
    Routine practice_ISI
    Routine practice_secondChoiceSpace_2
    Routine practice_decisionSpace
    Routine practice_feedbackSpace
  LoopTerminator practiceTrials
  LoopInitiator practiceCompleteLoop loopType="TrialHandler"
    loopType = random
    nReps = practiceToggle
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    Routine practiceComplete
  LoopTerminator practiceCompleteLoop
  Routine beginTest
  Routine setUp
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [OrderedDict([('label', 'test'), ('startVal', 0.01), ('startValSd', 0.005), ('pThreshold', 0.9), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('range', 1), ('minVal', 0), ('maxVal', 1), ('imageFile', '/lightBulb_ON.png')])]
    conditionsFile = questConditionsFile.xlsx
    loopType = interleaved staircases
    nReps = 30
    stairType = quest
    switchMethod = random
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    Routine ITI
    Routine firstChoiceSpace
    Routine ISI
    Routine secondChoiceSpace
    Routine decisionSpace
    Routine feedbackSpace
  LoopTerminator trials
  Routine testComplete
