PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'Practice': "['Yes', 'No']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = temp
  logging level = debug
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $value
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['Practice'] == 'Yes':
            practiceToggle = 6
        if expInfo['Practice'] == 'No':
            practiceToggle = 0
Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = practiceToggle
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    Routine trial
  LoopTerminator trials
