PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'Participant': '', 'Session': '1', 'Tone Length': "['Short', 'Long']", 'Condition': "['Quiet', 'Simultaneous', 'Backward']", 'Calibration Value': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = toneDetectionPlatform_V1.6
  logging level = debug
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Routines
  Routine firstChoiceSpace
    CodeComponent firstChoiceCode
      Code Type = Auto->JS
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      Begin Routine:
        condition = trialList[trialNumber]
        if condition == '1':
            toneDuration = presetToneDuration

        elif condition == '2':
            toneDuration = 0
    TextComponent firstVisualStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 1
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    SoundComponent firstChoiceNoise
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      volume [set every repeat] = $noiseVolume
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    SoundComponent firstChoiceProbeTone
      sound = 1000
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = toneVolume
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    ImageComponent firstChoiceLeftStimulus
      image = lightBulb_ON.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent firstChoiceRightStimulus
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine ISI
    TextComponent ISIVisualStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ISI
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    ImageComponent rightStimulus
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent leftStimulus
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine secondChoiceSpace
    CodeComponent secondChoiceCode
      Code Type = Auto->JS
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      Begin Routine:
        if condition == '1':
            toneDuration = 0

        elif condition == '2':
            toneDuration = presetToneDuration
    TextComponent secondVisualStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 2
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    SoundComponent secondChoiceNoise
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      volume [set every repeat] = $noiseVolume
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    SoundComponent secondChoiceTone
      sound = 1000
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = toneVolume
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    ImageComponent secondChoiceLeftStimulus
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent secondChoiceRightStimulus
      image = lightBulb_ON.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine ITI
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent ITICode
      Code Type = Auto->JS
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      Begin Experiment:
        trialNumber = 0
      Begin Routine:
        if trialNumber == 0:
            halfNTrials = int(trials.nTrials/2)
            trialList = ['1']*halfNTrials + ['2']*halfNTrials
            np.random.shuffle(trialList)
            print(trialList)

        toneVolume = level
  Routine decisionSpace
    CodeComponent decisionCode
      Code Type = Auto->JS
      Begin Routine:
        corrAns = condition
    TextComponent decisionTextProbe
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        In which interval did you hear the tone?
        1 OR 2?
    KeyboardComponent decisionKey
      allowedKeys = ['1','2']
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine feedbackSpace
    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "defaultFeedback"
      Begin Routine:
        if decisionKey.keys[0] == str(corrAns):
           feedback = "Correct"

        if decisionKey.keys[0] != str(corrAns):
           feedback = "Incorrect"
      End Routine:
        print('trialNumber:', trialNumber, 'tone was presented in interval: ', condition, 'toneVolume was:', toneVolume, 'participant was: ', feedback)
        trialNumber = trialNumber + 1
    TextComponent feedbackText
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine setUp
    CodeComponent setUpCode
      Code Type = Auto->JS
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      Begin Experiment:
        #Preset Tone Durations
        if expInfo['Tone Length'] == 'Long':
            presetToneDuration = 0.2 #200ms
        if expInfo['Tone Length'] == 'Short':
                presetToneDuration = 0.02 #20ms

        #Changes made based on condition
        if expInfo['Condition'] == 'Quiet': #if the Condition is Quiet, turn off background noise
            noiseVolume = 0
        else:
            noiseVolume = 1
        if expInfo['Condition'] == 'Simultaneous': #if Condition is 'Simultaneous', make onset 200ms into the trial
            toneOnset = 0.22 #.22 rather than .20 to account account for the 20ms gap that exists before the noise (starting at 20ms into the trial) at the start of the trial
        elif expInfo['Condition'] == 'Backward':  #else if Condition is 'Backward' : make Onset start at 0 (20ms before noise)
            toneOnset = 0
        else: #else, just start the tone in sync with the start of the noise (as per the 'Quiet' Condition)
            toneOnset = 0.02
    TextComponent firstITI
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine welcome
    TextComponent welcomeText
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Tone Detection task

        Press SPACE to begin
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
  Routine instructions
    ImageComponent instructionsLightBulb1
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instructionsText
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        When you begin  the task, you will be presented with two light bulbs on each side of the screen.
    TextComponent pressSpace
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = PRESS SPACE to continue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
    ImageComponent instructionsLightBulb1_2
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2_2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent instructionsText_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = In each trial, the light bulbs will blink
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    TextComponent pressSpace_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = PRESS SPACE to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_3
    ImageComponent instructionsLightBulb1_3
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2_3
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = The left light bulb or 'light bulb 1' will always blink first
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    TextComponent pressSpace_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press SPACE to see light bulb 1 blink
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_4
    ImageComponent instructionsLightBulb1_4
      image = lightBulb_ON.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent instructionsLightBulb2_4
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instructions_5
    ImageComponent instructionsLightBulb1_5
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent instructionsLightBulb2_5
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent instructionsLightBulb2_6
      image = lightBulb_ON.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 3
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = After a brief pause, the second light bulb 'light bulb 2' will also blink
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    TextComponent pressSpace_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 4
      text = Press SPACE to continue
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine instructions_6
    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        In each trial, ONE of the light bulbs will also make a noise
    TextComponent text_5
      color = black
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 2
      text = press SPACEBAR to hear this sound
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instructions_7
    ImageComponent lightBulbOFF
      image = lightBulb_OFF.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent lightBulbON
      image = lightBulb_ON.png
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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    SoundComponent sound_1
      sound = 1000
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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  Routine instructions_8
    TextComponent instructions_8_firstLine
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Remember, although BOTH light bulbs will blink, only ONE light bulb will make a noise!
    TextComponent text_8
      color = black
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 2
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      text:
        It is your job to decide which light bulb made the noise by responding your the number pad.
    TextComponent text_9
      color = black
      letterHeight = 0.04
      pos = (0, -0.02)
      startVal [time (s)] = 4
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      text:
        IF you think that 'light bulb 1' made the noise, press '1'
        OR IF you think 'light bulb 2' made the noise, press '2'
    TextComponent instructions_8_pressP
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 6
      text = press 'p' to begin the practice trials!
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    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 6
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  Routine practice_ITI
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        level = expInfo['level']
      Begin Routine:
        #set desired dB of the practice trials to 40
        desired_db = 40

        #convert variable types to integer
        level = int(level)
        desired_db = int(desired_db)

        psychopy_input_value = ((level/10)/(10**(117/20))*(10**(desired_db/20)))
        print(psychopy_input_value)
  Routine practice_firstChoiceSpace
    CodeComponent firstChoiceCode_2
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 1:
            toneDuration = 0.2

        elif condition == 2:
            toneDuration = 0
    TextComponent firstVisualStimulus_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 1
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    SoundComponent firstChoiceProbeTone_2
      sound = 1000
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
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    ImageComponent firstChoiceLeftStimulus_2
      image = lightBulb_ON.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent firstChoiceRightStimulus_2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine practice_secondChoiceSpace
    TextComponent ISIVisualStimulus_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ISI
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    ImageComponent rightStimulus_2
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent leftStimulus_2
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine practice_decisionSpace
    CodeComponent decisionCode_2
      Code Type = Auto->JS
      Begin Routine:
        corrAns = condition
    TextComponent decisionTextProbe_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        In which interval did you hear the tone?
        1 OR 2?
    KeyboardComponent decisionKey_2
      allowedKeys = ['1','2']
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine practice_feedbackSpace
    CodeComponent feedbackCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback = "defaultFeedback"
      Begin Routine:
        if decisionKey_2.keys[0] == str(corrAns):
           feedback = "Correct"

        if decisionKey_2.keys[0] != str(corrAns):
           feedback = "Incorrect"
    TextComponent feedbackText_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine practice_ISI
    TextComponent ISIVisualStimulus_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ISI
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    ImageComponent rightStimulus_3
      image = lightBulb_OFF.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent leftStimulus_3
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine practice_secondChoiceSpace_2
    CodeComponent secondChoiceCode_2
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 1:
            toneDuration = 0

        elif condition == 2:
            toneDuration = 0.2
    TextComponent secondVisualStimulus_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
      text = 2
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    SoundComponent secondChoiceTone_2
      sound = 1000
      startVal [time (s)] = $toneOnset
      stopVal [duration (s)] = $toneDuration
      volume [set every repeat] = 1
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    ImageComponent secondChoiceLeftStimulus_2
      image = lightBulb_OFF.png
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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    ImageComponent secondChoiceRightStimulus_2
      image = lightBulb_ON.png
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.02
      stopVal [duration (s)] = 0.32
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  Routine practiceComplete
    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now completed the practice trials!

        If you understand the task, press 'c' to continue.

        If you do not understand the task, please ask for some help!
    KeyboardComponent key_resp_7
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beginTest
    TextComponent text_10
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Upon pressing 'b', you will begin the testing session.

        Remember, in the testing session trials, the sound the light bulb makes will be shorter than the sounds made in the practice trials.

        The trials will also be a little faster, so stay alert!

        Press 'b' to begin
    KeyboardComponent key_resp_8
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instructions
  Routine instructions_2
  Routine instructions_3
  Routine instructions_4
  Routine instructions_5
  Routine instructions_6
  Routine instructions_7
  Routine instructions_8
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = practiceConditionsFile.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 1)]),
      OrderedDict([('condition', 2)]),
      OrderedDict([('condition', 1)]),
      OrderedDict([('condition', 2)]),
      OrderedDict([('condition', 1)])]
    Routine practice_ITI
    Routine practice_firstChoiceSpace
    Routine practice_ISI
    Routine practice_secondChoiceSpace_2
    Routine practice_decisionSpace
    Routine practice_feedbackSpace
  LoopTerminator practiceTrials
  Routine practiceComplete
  Routine beginTest
  Routine setUp
  LoopInitiator trials loopType="MultiStairHandler"
    conditions = [OrderedDict([('label', 'test'), ('startVal', 0.01), ('startValSd', 0.005), ('pThreshold', 0.9), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('range', 1), ('minVal', 0), ('maxVal', 1), ('imageFile', '/lightBulb_ON.png')])]
    conditionsFile = questConditionsFile.xlsx
    loopType = interleaved staircases
    nReps = 30
    stairType = quest
    switchMethod = random
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    Routine ITI
    Routine firstChoiceSpace
    Routine ISI
    Routine secondChoiceSpace
    Routine decisionSpace
    Routine feedbackSpace
  LoopTerminator trials
