PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'input': '0.2', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = temp
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        level = 0.5
    SoundComponent sound_1
      sound = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      volume [set every frame] = level
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    KeyboardComponent key_resp
      allowedKeys = 'down','up'
      correctAns = $'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      storeCorrect = True
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    TextComponent question_text
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 'Does your db SPL meter read 113 db SPL?'
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    TextComponent level_text
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $level
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  Routine start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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      text:
        Headphone calibration


        Press space to start
Flow
  Routine start
  LoopInitiator trials loopType="StairHandler"
    N down = 1
    N up = 1
    isTrials = False
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 50
    start value = 0.1
    step sizes = [0.8,0.8, 0.6, 0.6, 0.4,0.4,0.1, 0.1,  0.05]
    step type = log
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    Routine trial
  LoopTerminator trials
