PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'Tone Length': "['Short', 'Long']", 'Condition': "['Temporal Centre', 'Backward Masking', 'Simultaneous Onset', 'Simultaneous Delay', 'Forward Masking']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = longToneDetection_BETA002
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Routines
  Routine Trial
    CodeComponent initializeTrial
      Code Type = Py
      Begin Experiment:
        #Initial color intensity of the feedback stimulus
        intensity = .5

        #Initial volume of the long tones (in psychopy units)
        toneVolume = .5

        ##Developer section:
        ##I'm using this as an alternative to expInfo for the time being (i.e., for the time I am using BUILDER view)

        #Adjustments made based on Tone
        if expInfo['Tone Length'] == 'Long':
            toneDuration = 0.2 #200ms
        if expInfo['Tone Length'] == 'Short':
                toneDuration = 0.02 #20ms

        #Adjustments made based on Condition
        #These are made relative to the Bandpass Noise
        #Bandpass Noise 1 starts: 1 AND finishes: 1.3
        #Bandpass Noise 2 starts: 2.1 AND finishes: 2.4

        # Long Tone Condition
        if expInfo['Condition'] == 'Temporal Centre':
            probe1Onset = 1.05
            probe2Onset = 2.15

        # Short Tone Conditions
        if expInfo['Condition'] == 'Backward Masking':
            probe1Onset = 0.98 #1 (bandpassNoise1 onset) - .02
            probe2Onset = 2.08 #2.1 (bandpassNoise2 onset) - .02

        if expInfo['Condition'] == 'Simultaneous Onset':
            probe1Onset = 1
            probe2Onset = 2.1

        if expInfo['Condition']  == 'Simultaneous Delay':
            probe1Onset = 1.2 #1 - .2
            probe2Onset = 2.3 #2.1 + .2

        if expInfo['Condition']  == 'Forward Masking':
            probe1Onset = 1.30 #1.3 is the offset of bandpassNoise1
            probe2Onset = 2.40 #2.4 is the offset of bandpassNoise2
      Begin Routine:
        if condition == 1:
            probe1_toneDuration = toneDuration
            probe2_toneDuration = 0

        elif condition == 2:
            probe1_toneDuration = 0
            probe2_toneDuration = toneDuration
    SoundComponent probeTone1
      sound = 1000
      startVal [time (s)] = $probe1Onset
      stopVal [duration (s)] = $probe1_toneDuration
      volume [set every repeat] = toneVolume
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    TextComponent delay
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        +
    TextComponent ISI
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.8
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    SoundComponent probeTone2
      sound = 1000
      startVal [time (s)] = $probe2Onset
      stopVal [duration (s)] = $probe2_toneDuration
      volume [set every repeat] = toneVolume
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    SoundComponent bandpassNoise1
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = .30
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    SoundComponent bandpassNoise2
      sound = Noise_BP_600_1400.wav
      startVal [time (s)] = 2.1
      stopVal [duration (s)] = 0.3
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    TextComponent interval1
      letterHeight = 0.75
      startVal [time (s)] = 1
      stopVal [duration (s)] = .3
      text = 1
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    TextComponent interval2
      letterHeight = 0.75
      startVal [time (s)] = 2.1
      stopVal [duration (s)] = 0.3
      text = 2
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  Routine Welcome
    TextComponent Welcome_Text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Auditory Tone Detection Task

        Press SPACE to continue
    KeyboardComponent Welcome_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inter_trial_Interval
    TextComponent ITI_Text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine Instructions
    TextComponent instructionsText
      letterHeight = 0.030
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be presented with trials.
        In each of these trials, you will be presented with two listening intervals.
        A tone will be presented in only one of the two intervals.

        The listening intervals will be visually indicated by the numbers "1" and "2", separated by a short delay.
        After the two listening intervals, you must decide in which interval you heard the tone.

        Press SPACE for to begin
    KeyboardComponent instructionsResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Question
    TextComponent questionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In which interval ("1" or "2") do you think you heard the tone?

        Respond using the number pad. If you are unsure, just pick the option you are most confident with.
    KeyboardComponent questionResponse
      allowedKeys = ['1','2']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent toneAdjustment
      Code Type = Py
      Begin Routine:
        if questionResponse.keys[0] == str(condition):
           #Adjust tone volume
           toneVolume = toneVolume - 0.05 #tone volume goes down 2 dB for every correct response
           print('Tone Volume is now:', toneVolume, type(toneVolume))

        elif questionResponse.keys[0] != str(condition):
           #Adjust tone volume
           toneVolume = toneVolume + 0.05 #tone volume goes down by 2dB for every correct response
           print('Tone Volume is now:', toneVolume)

        if toneVolume < .5 - .45: #if tone volume falls below .05 (which can't be represented exactly in python for reasons that currently escape me
            print('Tone Volume now below zero')
            toneVolume = .5 - .45 #set the tone to be at .05 (so it can't fall below)

        elif toneVolume == 0:
                print('Tone Volume has been set to zero')

        elif toneVolume > 0:
                print('Tone Volume still above zero')
    TextComponent feedbackText
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $toneVolume
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    CodeComponent feedbackColourAdjustment
      Code Type = Py
      Begin Routine:
        if questionResponse.keys[0] == str(condition):
           #Adjust feedback color and intensity
           intensity = intensity - 0.05
           feedbackText.setColor([0,intensity,0], colorSpace='rgb') #GREEN


        elif questionResponse.keys[0] != str(condition):
           #Adjust feedback color and intensity
           intensity = intensity + 0.05
           feedbackText.setColor([intensity,0,0], colorSpace='rgb') #RED
Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [OrderedDict([('condition', 1), ('probe1', 1), ('probe2', 0)]),
      OrderedDict([('condition', 2), ('probe1', 0), ('probe2', 1)])]
    Routine Trial
    Routine Question
    Routine Feedback
  LoopTerminator trials
