PsychoPy2experiment version="2020.2.8"
Settings
  Experiment info = {'participant': '', 'session': '', 'level': '0.8912509381337451'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = headphone_calibration_check
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Routines
  Routine start
    TextComponent press_space
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press space to continue
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    TextComponent title_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Headphone Calibration Check
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        level = expInfo['level']
      Begin Routine:
        #convert variable types to integer
        level = float(level)
        desired_db = int(desired_db)

        #estimate psychopy value to produce given dB
        #level is the value inserted at the beginning, which should have come from headphone_calibation.psyexp
        #desired dB are the list of desired dB output in the calibration.xlsx file


        psychopy_input_value = ((level)/(10**(113/20))*(10**(desired_db/20)))

        #print
        print('level', level)
        print('desired_db', desired_db)
        print('psychopy_input_value', psychopy_input_value)
    TextComponent text_2
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Press space if the value presented on the screen is the value presented on your dB SPL meter
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $desired_db
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    SoundComponent sound_1
      sound = pure_tone_1000Hz.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      volume [set every repeat] = psychopy_input_value
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = desired_db.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('desired_db', 30)]),
      OrderedDict([('desired_db', 35)]),
      OrderedDict([('desired_db', 40)]),
      OrderedDict([('desired_db', 45)]),
      OrderedDict([('desired_db', 50)]),
      OrderedDict([('desired_db', 55)]),
      OrderedDict([('desired_db', 60)]),
      OrderedDict([('desired_db', 65)]),
      OrderedDict([('desired_db', 70)]),
      OrderedDict([('desired_db', 75)]),
      OrderedDict([('desired_db', 80)]),
      OrderedDict([('desired_db', 85)]),
      OrderedDict([('desired_db', 90)]),
      OrderedDict([('desired_db', 95)]),
      OrderedDict([('desired_db', 100)])]
    Routine trial
  LoopTerminator trials
